PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = video
  keyboardBackend = ioHub
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Routines
  Routine trial
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = loop1.mp4
      size = (2,1)
      startVal [time (s)] = 0.0
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  Routine baslangic
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instruction
      image = başlangıç.jpg
      size = (2,2)
      startVal [time (s)] = 0.0
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  Routine trial2
    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = loop2.mp4
      size = (2,1)
      startVal [time (s)] = 0.0
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  Routine trial3
    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = False
      movie = loop3.mp4
      size = (2,1)
      startVal [time (s)] = 0.0
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  Routine trial4
    MovieComponent movie_4
      backend = ffpyplayer
      forceEndRoutine = False
      movie = loop4.mp4
      size = (2,1)
      startVal [time (s)] = 0.0
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  Routine trial5
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  Routine trial6
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  Routine trial7
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  Routine trial8
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  Routine rahat
    ImageComponent image
      image = rahatnefes.jpg
      size = (2,1)
      startVal [time (s)] = 0.0
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Flow
  Routine baslangic
  Routine trial
  Routine trial2
  Routine trial3
  Routine trial4
  Routine trial5
  Routine trial6
  Routine trial7
  Routine trial8
  Routine rahat
